PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = externalMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -0.4510, 0.0196, 0.4118
  expName = First Attempt at Part 2 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent stimuli3streams
      sound = $stimuliOddballs
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 30.0
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    SoundComponent stimuli3streamsoddballs
      sound = $stimuli
      startVal [time (s)] = 34.0
      stopVal [duration (s)] = 30.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 64.0
      stopVal [duration (s)] = 5.0
      text = How many oddballs did you hear?
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 64.0
      stopVal [duration (s)] = 5.0
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    ImageComponent arrow
      image = $arrowImages
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent feedbackIncorrect
      size = (0.5, 0.5)
      startVal [condition] = $correctAnswer==True
      stopVal [duration (s)] = 2.0
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    ImageComponent feedbackCorrect
      size = (0.5, 0.5)
      startVal [time (s)] = $correctAnswer==False
      stopVal [duration (s)] = 2.0
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  Routine break_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text = Relax. Feel free to blink/stretch/etc, and then click 'NEXT' when you are ready to start the next trial.
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    MouseComponent mouse
      clickable = nextButton_R
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent top_instr_txt
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Three of the music pieces you heard earlier will play at the same time: one vibraphone piece, one keyboard piece, and one harmonica piece. These will play from the left, centre, and right respectively.

        First, you will be told to pay attention to one of these pieces in particular. E.g, if you see an "^" arrow, then you should pay attention to the keyboard piece, coming from the centre.

        Then, the pieces will play twice in a row. The first time will just be to remind you of the pieces. During the second time, there will be some "oddballs" where the pitch is shifted for two seconds. Try to count these. Please try not to blink or move during the minute whilst the music plays.

        You will need to type in how many oddballs you heard. You will then receive feedback.

        After this you will have the chance to take a break and blink/stretch/etc, before starting the next trial. The pieces played next may be the same as previously or different ones.

        If you have any questions at all please ask the experimenters.
    MouseComponent mouse_2
      clickable = nextButton_instruct
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_instruct
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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  Routine Ready
    TextComponent top_instr_txt_3
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = When you are ready, click "NEXT".
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    MouseComponent mouse_4
      clickable = nextButton_R1B
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_R1B
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine Ready
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:15
    conditionsFile = stimuliOddballsList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'},
      {'stimuliOddballs': 'StimuliOddballs/', 'arrowImages': 'arrowImages/'}]
    Routine trial
  LoopTerminator trials
