PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = First Attempt at Questionnaire Expt Script
  keyboardBackend = ioHub
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Routines
  Routine Demographics
    TextComponent DemoHeading
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Demographics
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    TextComponent gender
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      startVal [time (s)] = 0.0
      text = Q1: What is your gender?
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    SliderComponent genderResp
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Other", "Transgender female", "Transgender female" "Female", "Male")
      letterHeight = 0.035
      pos = (-0.55, 0.35)
      size = (0.015, 0.14)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent genderRespOther
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0, 0.35)
      size = (0.425, 0.04)
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    TextComponent age
      letterHeight = 0.03
      pos = (-0.55, 0.25)
      startVal [time (s)] = 0.0
      text = Q2: What is your age in years?
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    TextboxComponent ageResp
      bold = False
      borderColor = Black
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.025
      pos = (0.135, 0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent nationality
      letterHeight = 0.03
      pos = (-0.55, 0)
      startVal [time (s)] = 0.0
      text = Q3: What is your nationality?
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    TextboxComponent nationalityResp
      bold = False
      borderColor = Black
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.025
      pos = (0.135, -0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent originCountry
      letterHeight = 0.03
      pos = (-0.55, -0.3)
      startVal [time (s)] = 0.0
      text = Q4: What is your country of origin?
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    TextboxComponent originCountryResp
      bold = False
      borderColor = Black
      color = Black
      editable = True
      fillColor = White
      letterHeight = 0.025
      pos = (0, -0.3)
      size = (0.425, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent nextButton
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Current_Mental_Property
    TextComponent cmpHeading
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Current Mental Property
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    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
      text = The next questions will focus on how well-rested you are, your "wiredness" (due to caffeine, sugar intake, etc), and your mood. Please remember to ask for clarification if you are unsure of any questions.
      wrapWidth = 1.7
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    TextComponent tired
      letterHeight = 0.03
      pos = (-0.5, 0.45)
      startVal [time (s)] = 0.0
      text = Q5:  How rested do you feel? A rating of 1 indicates not at all, and a rating of 5 indicates very well-rested.
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    SliderComponent tiredResp
      forceEndRoutine = False
      granularity = 0
      labels = ("1", "2","3","4","5")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent wired
      letterHeight = 0.03
      pos = (-0.5, 0.45)
      startVal [time (s)] = 0.0
      text = Q5:  How "wired" do you feel? A rating of 1 indicates not at all, and a rating of 5 indicates very "wired".
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    SliderComponent wiredResp
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("1","2","3","4","5")
      letterHeight = 0.035
      pos = (-0.5, 0.15)
      size = (0.015, 0.15)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent moodValence
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
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      text:
        How positive or negative is your current mood?
    SliderComponent moodValenceResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very negative", "Neutral", "Very positive")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent moodArousal
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = How active (energetic) or passive is your current mood? For example, sleepiness is a passive feeling, whereas excitement is an active feeling.
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    SliderComponent moodArousalResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very passive", "Neutral", "Very active")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent moodDominance
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = Q8: How dominant would you say your current mood is? For example, although fear and anger are both active and negative, fear makes a person feel submissive, whereas anger makes a person feel dominant.
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    SliderComponent moodDominanceResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Very submissive", "Neutral", "Very dominant")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    ImageComponent nextButton2
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse2
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine routine_1
    TextComponent age_2
      letterHeight = 0.03
      pos = (-0.5, 0.45)
      startVal [time (s)] = 0.0
      text = What age group are you in?
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    SliderComponent respAge
      forceEndRoutine = False
      granularity = 0
      labels = ("Agree","Disagree")
      letterHeight = 0.035
      pos = (0.4, 0.45)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent gender_3
      letterHeight = 0.03
      pos = (-0.5, 0.3)
      startVal [time (s)] = 0.0
      text = What gender are you?
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    SliderComponent genderResp1
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Prefer not to say", "In another way", "Non-binary", "Man", "Woman")
      letterHeight = 0.035
      pos = (-0.5, 0.15)
      size = (0.015, 0.15)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent genderResp2
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.135, 0.11)
      size = (0.425, 0.04)
      startVal [time (s)] = 0
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    TextComponent student_3
      letterHeight = 0.03
      pos = (-0.55, 0)
      startVal [time (s)] = 0.0
      text = Are you a student?
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    SliderComponent studentResp_3
      forceEndRoutine = False
      granularity = 1
      labels = ("Undergraduate", "Taught postgraduate", "Research postgraduate", "No")
      letterHeight = 0.035
      pos = (0, -0.05)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent mood_3
      letterHeight = 0.03
      pos = (-0.45, -0.15)
      startVal [time (s)] = 0.0
      text = What is your current mood?
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    SliderComponent moodResp_3
      forceEndRoutine = False
      granularity = 0
      labels = ("Low", "Okay", "Great!")
      letterHeight = 0.03
      pos = (-0.1, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    ImageComponent nextButton_3
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [condition] = respAge.rating and genderResp1.rating and studentResp.rating and moodResp.rating
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    MouseComponent mouse_3
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Personal_Responses_to_Music__Perception
    TextComponent personalResponsesHeading
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Personal Responses to Music: Perception
    TextComponent Q9
      letterHeight = 0.03
      pos = (-0.4, 0.35)
      startVal [time (s)] = 0.0
      text = Q9: I am able to judge whether someone is a good singer or not.
      wrapWidth = 1.3
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    SliderComponent Q9Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.5, 0.35)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q10
      letterHeight = 0.03
      pos = (-0.4, 0.27)
      startVal [time (s)] = 0.0
      text = Q10: I usually know when I'm hearing a song for the first time.
      wrapWidth = 1.3
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    SliderComponent Q10Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.5, 0.27)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q11
      letterHeight = 0.03
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
      text = Q11: I find it difficult to spot mistakes in a performance of a song even if I know the tune.
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    SliderComponent Q11Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.025
      pos = (0.5, 0.19)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q12
      letterHeight = 0.03
      pos = (-0.4, 0.11)
      startVal [time (s)] = 0.0
      text = Q12: I can compare and discuss differences between two performances or versions of the same piece of music.
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    SliderComponent Q12Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.035
      pos = (0.3, 0.11)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q13
      letterHeight = 0.03
      pos = (-0.5, 0.03)
      startVal [time (s)] = 0.0
      text = Q13: I have trouble recognizing a familiar song when played in a different way or by a different performer.
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    SliderComponent Q13Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.035
      pos = (0.3, 0.03)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q14
      letterHeight = 0.03
      pos = (-0.4, -0.05)
      startVal [time (s)] = 0.0
      text = Q14: I can tell when people sing or play out of time with the beat.
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    SliderComponent Q14Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.035
      pos = (0.3, -0.05)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q15
      letterHeight = 0.03
      pos = (-0.5, -0.13)
      startVal [time (s)] = 0.0
      text = Q15: I can tell when people sing or play out of tune.
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    SliderComponent Q15Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.035
      pos = (0.3, -0.13)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q16
      letterHeight = 0.03
      pos = (-0.5, -0.21)
      startVal [time (s)] = 0.0
      text = Q16: When I sing, I have no idea whether I'm in tune or not.
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    SliderComponent Q16Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.035
      pos = (0.3, -0.21)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    TextComponent Q17
      letterHeight = 0.03
      pos = (-0.5, -0.29)
      startVal [time (s)] = 0.0
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      text:
        Q17: When I hear a music piece, I can usually identify its genre.
    SliderComponent Q17Resp
      forceEndRoutine = False
      granularity = 1
      labels = ("Agree", "Disagree")
      letterHeight = 0.035
      pos = (0.3, -0.29)
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2)
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    ImageComponent nextButton_2
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
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    MouseComponent mouse_2
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine Demographics
  Routine Current_Mental_Property
  Routine Personal_Responses_to_Music__Perception
